%%
% Poisson mechanism based on Jason's email implementation. For some
% reason this produces huge PSPs

% Pulse train properties
PPstim = -.1;
PPfreq = 1.5; % in Hz
PPwidth = 250; % in ms
PPshift = 0; % in ms

% Time series properties
Tend=T(end); 	    % ms, max simulation duration
dt=0.01;        % ms, time step duration
PPonset = 500;    % ms, onset time
PPoffset = Inf;   % ms, offset time

kernel_type = 7;
width2_rise = 0.25;

s2=getPeriodicPulseFast(PPfreq,PPwidth,PPshift,Tend,dt,PPonset,PPoffset,Npop,kernel_type,width2_rise,0);

input(X)=s2(k,:)
Iext(X)=PPstim*input(X)
@current += -Iext(X)

